graphs:

- id: Classification
  nodes:
  - id: sub
    module: timeflux.nodes.zmq
    class: Sub
    params:
      topics: [ filtered, events ]
  - id: epoch
    module: nodes.epoch
    class: Samples
    params:
      trigger: epoch
      length: {{ EPOCH }}
      offset: {{ OFFSET }}   #DIFFERENT
  - id: classification
    module: timeflux.nodes.ml
    class: Pipeline
    params:
      mode: predict_proba
      meta_label: [epoch, context, bit]
      event_start_accumulation: calibration_begins
      event_stop_accumulation: calibration_ends
      event_start_training: calibration_ends
      event_reset: reset
      steps:
        - module: nodes.shapeAux #timeflux.estimators.transformers.shape
          class: Transpose
          args:
            axes: [0, 2, 1]
        - module: estimators.burst
          class: Scale
        - module: pyriemann.estimation
          class: XdawnCovariances
          args:
            nfilter: 4
            estimator: lwf
            xdawn_estimator: scm
        - module: pyriemann.tangentspace
          class: TangentSpace
          args:
            metric: riemann
        - module: sklearn.discriminant_analysis
          class: LinearDiscriminantAnalysis
          args:
            solver: lsqr
            shrinkage: auto
  - id: predict
    module: nodes.accumulation.simple
    class: AccumulationSteadyPred
    params:
      codes:
      {% for CODE in TASK_CODES.split() %}
        - "{{CODE}}"
      {% endfor %}
      min_buffer_size: {{MIN_BUFFER_LENGTH}}
      max_buffer_size: {{MAX_BUFFER_LENGTH}}
      min_frames_pred: {{MIN_PRED_LENGTH}}
      max_frames_pred: {{MAX_PRED_LENGTH}}
      correlation_threshold: {{CORRELATION_THRESHOLD}}   #DIFFERENT
      diff_correlation_threshold: {{DIFF_CORRELATION_THRESHOLD}}   #DIFFERENT
  # - id: pub   # BEFORE
  #   module: timeflux.nodes.zmq
  #   class: Pub
  #   params:
  #     topic: predictions
  - id: pub_predictions
    module: timeflux.nodes.zmq
    class: Pub
    params:
      topic: predictions 
  - id: pub_events  # MIO
    module: timeflux.nodes.zmq
    class: Pub
    params:
      topic: events
  - id: pub_correlations
    module: timeflux.nodes.zmq
    class: Pub
    params:
      topic: correlations
  edges:
    - source: sub:filtered
      target: epoch
    - source: sub:events
      target: epoch:events
    - source: sub:events
      target: classification:events
    - source: sub:events
      target: predict:events
    - source: epoch:*
      target: classification:training
    - source: epoch:*
      target: classification
    - source: classification:events
      target: predict:clf
    - source: predict
      target: pub_predictions
    - source: predict:correlations
      target: pub_correlations
    - source: classification:events # MIO
      target: pub_events
    # - source: classification:events
    #   target: display
  rate: 10

